PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tutorial_5
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'},
      {'study_word': 'guitar'},
      {'study_word': 'plane'},
      {'study_word': 'tomato'},
      {'study_word': 'fire'},
      {'study_word': 'star'},
      {'study_word': 'flower'},
      {'study_word': 'sun'},
      {'study_word': 'burn'},
      {'study_word': 'gun'},
      {'study_word': 'learn'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_a_e'},
      {'test': 't_g_r'},
      {'test': '_oo_'},
      {'test': 'c_s_h_o_n'},
      {'test': '_ia_n_'},
      {'test': '_ea_o_'},
      {'test': 'c_m_r'},
      {'test': '_p_a_d_'},
      {'test': '_o_s_'},
      {'test': 'o_a_n_e'},
      {'test': 'guit_r'},
      {'test': 'p_a_e'},
      {'test': 'to___to'},
      {'test': '_ire'},
      {'test': '_t_r'},
      {'test': 'fl__er'},
      {'test': 's__'},
      {'test': '_u__'},
      {'test': 'g_n'},
      {'test': '__arn'},
      {'test': 'ta_l_'},
      {'test': 'ra_g_'},
      {'test': 'r_ _e_'}]
    Routine test
  LoopTerminator trials_2
